PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '000', 'order [1: single-dual or 2: dual-single]': '1', 'refresh rate (Hz)': '60', 'port(noEEGtest/parallel/serial/cedrus/ghent)': 'noEEGtest', 'port address': '0xC000', 'language': 'en'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2024.1.5
  Window size (pixels) = [1920, 1080]
  color = $[-0.75,-0.75,-0.75]
  expName = Luck1996AB
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instructions
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    TextComponent text_instructions
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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    CodeComponent code_instr
      Code Type = Py
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      Begin Routine:
        # open files with instructions
        if block.thisN in [0,6]:
            if task == 'single':
                with open(f'{local_path}/instruction_singleTask.txt', 'r') as file:
                    text_instructions.text = file.read()
            if task == 'dual':
                with open(f'{local_path}/instruction_dualTask.txt', 'r') as file:
                    text_instructions.text = file.read()
        else:
            continueRoutine = False
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine T2_probe
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    CodeComponent code_trigger_T2
      Code Type = Py
      Begin Routine:
        stimulus_pulse_started = False
        stimulus_pulse_ended = False
      Each Frame:
        #send T2 trigger (40/41/42/43)
        if text_T2.status == STARTED and not stimulus_pulse_started:
            stimulus_pulse_started = True
            stimulus_pulse_start_time = globalClock.getTime()
            send_trigger(trigger_T2)
        #reset trigger (0)
        if stimulus_pulse_started and not stimulus_pulse_ended:
            if globalClock.getTime() - stimulus_pulse_start_time >= 0.005:
                send_trigger(0)
                stimulus_pulse_ended = True
    TextComponent text_T2
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (frames)] = dur_frames_stim
      text [set every repeat] = $T2
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    TextComponent text_blank_T2_probe
      durationEstim = 0.05
      letterHeight = 0.05
      startVal [frame N] = dur_frames_stim
      stopVal [duration (frames)] = dur_frames_blank
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  Routine Ask_T1
    RoutineSettingsComponent Ask_T1
      skipIf = task == 'single'
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    CodeComponent code_text_T1ask
      Code Type = Py
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      Begin Routine:
        if task == 'dual':
            pressed = False
            stimulus_pulse_started = False
            stimulus_pulse_ended = False
      Each Frame:
        if task == 'dual':
            # send AskT1(?) trigger (50)
            if text_T1ask.status == STARTED and not stimulus_pulse_started:
                stimulus_pulse_started = True
                stimulus_pulse_start_time = globalClock.getTime()
                send_trigger(50)
            #reset trigger
            if stimulus_pulse_started and not stimulus_pulse_ended:
                if globalClock.getTime() - stimulus_pulse_start_time >= 0.005:
                    send_trigger(0)
                    stimulus_pulse_ended = True

            # send AnswerT1 trigger (51/52/53/54)
            if key_resp_T1.keys and not pressed:
                pressed = True
                stimulus_pulse_start_time = globalClock.getTime()
                if key_resp_T1.keys == responseT1:
                    counter_T1 += 1
                    event_ans_T1 = 53 if responseT1 == 'j' else 51
                else:
                    event_ans_T1 = 54 if responseT1 == 'j' else 52
                send_trigger_now(event_ans_T1)
            #reset trigger
            if pressed:
                if globalClock.getTime() - stimulus_pulse_start_time >= 0.005:
                    send_trigger_now(0)
                    pressed = False
                    continueRoutine = False
      End Routine:
        if task == 'dual':
            print(f'Corr T1: {key_resp_T1.corr}')

            if (trial.thisN+1)%10 == 0:
                print(f'\n Accuracy T1: {counter_T1/10}\n')
                counter_T1 = 0
    TextComponent text_T1ask
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = ?
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    KeyboardComponent key_resp_T1
      allowedKeys = 'f','j'
      correctAns = $responseT1
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine Ask_T2
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    CodeComponent code_T2_ask
      Code Type = Py
      Begin Routine:
        pressed = False
        stimulus_pulse_started = False
        stimulus_pulse_ended = False
      Each Frame:
        # send AskT2(?) trigger (60)
        if text_T2ask.status == STARTED and not stimulus_pulse_started:
            stimulus_pulse_started = True
            stimulus_pulse_start_time = globalClock.getTime()
            send_trigger(60)
        #reset trigger
        if stimulus_pulse_started and not stimulus_pulse_ended:
            if globalClock.getTime() - stimulus_pulse_start_time >= 0.005:
                send_trigger(0)
                stimulus_pulse_ended = True

        # send AnswerT1(61/62/63/64) trigger
        if key_resp_T2.keys and not pressed:
            pressed = True
            stimulus_pulse_start_time = globalClock.getTime()
            if key_resp_T2.keys == responseT2:
                counter_T2 += 1
                event_ans_T2 = 61 if related == 'related' else 63
            else:
                event_ans_T2 = 62 if related == 'related' else 64
            send_trigger_now(event_ans_T2)
        #reset trigger
        if pressed:
            if globalClock.getTime() - stimulus_pulse_start_time >= 0.005:
                send_trigger_now(0)
                pressed = False
                continueRoutine = False
      End Routine:
        print(f'Corr T2: {key_resp_T2.corr}')

        if (trial.thisN+1)%10 == 0:
            print(f'\n Accuracy T2: {counter_T2/10}')
            counter_T2 = 0
    TextComponent text_T2ask
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = ?
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    KeyboardComponent key_resp_T2
      allowedKeys = 'f','j'
      correctAns = $responseT2
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine T0_context
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    CodeComponent code_trigger_T0
      Code Type = Py
      Begin Routine:
        stimulus_pulse_started = False
        stimulus_pulse_ended = False
      Each Frame:
        #send T0 trigger (10/11)
        if context_word.status == STARTED and not stimulus_pulse_started:
            stimulus_pulse_started = True
            stimulus_pulse_start_time = globalClock.getTime()
            send_trigger(trigger_T0)
        #reset trigger (0)
        if stimulus_pulse_started and not stimulus_pulse_ended:
            if globalClock.getTime() - stimulus_pulse_start_time >= 0.005:
                send_trigger(0)
                stimulus_pulse_ended = True
    TextComponent context_word
      color = -1.0000, -1.0000, 1.0000
      durationEstim = 1
      letterHeight = 0.05
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $refreshRate
      text [set every repeat] = $T0
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    TextComponent blankContext
      durationEstim = 1
      letterHeight = 0.05
      startVal [frame N] = $refreshRate
      stopVal [duration (frames)] = $refreshRate
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  Routine distractors_T1
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    CodeComponent code_trigger_distrT1
      Code Type = Py
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      Begin Routine:
        thisExp.addData('distractor_T1',distractors_trial[i])
        stimulus_pulse_started = False
        stimulus_pulse_ended = False
      Each Frame:
        #send dist_T1 trigger (30)
        if text_distr_T1.status == STARTED and not stimulus_pulse_started:
            stimulus_pulse_started = True
            stimulus_pulse_start_time = globalClock.getTime()
            send_trigger(30)
        #reset trigger (0)
        if stimulus_pulse_started and not stimulus_pulse_ended:
            if globalClock.getTime() - stimulus_pulse_start_time >= 0.005:
                send_trigger(0)
                stimulus_pulse_ended = True
      End Routine:
        i += 1
    TextComponent text_distr_T1
      color = blue
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (frames)] = dur_frames_stim
      text [set every repeat] = $distractors_trial[i]
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    TextComponent text_blank_distractors_T1
      durationEstim = 0.05
      letterHeight = 0.05
      startVal [frame N] = dur_frames_stim
      stopVal [duration (frames)] = dur_frames_blank
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  Routine rest
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    CodeComponent code_rest
      Code Type = Py
      Begin Routine:
        # skip rest after last block
        if block.thisN+1 == 12:
            continueRoutine = False
        else:
            stimulus_pulse_started = False
            stimulus_pulse_ended = False
      Each Frame:
        if block.thisN+1 != 12:
            #send rest trigger (100)
            if text_rest.status == STARTED and not stimulus_pulse_started:
                stimulus_pulse_started = True
                stimulus_pulse_start_time = globalClock.getTime()
                send_trigger(100)
            #reset trigger (0)
            if stimulus_pulse_started and not stimulus_pulse_ended:
                if globalClock.getTime() - stimulus_pulse_start_time >= 0.005:
                    send_trigger(0)
                    stimulus_pulse_ended = True
    TextComponent text_rest
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $txt_rest
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    KeyboardComponent press_to_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine distractors_T2
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    CodeComponent code_trigger_distrT2
      Code Type = Py
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      Begin Routine:
        thisExp.addData('distractor_T2',distractors_trial[i])
        stimulus_pulse_started = False
        stimulus_pulse_ended = False
      Each Frame:
        #send dist_T2 trigger (30)
        if text_distr_T2.status == STARTED and not stimulus_pulse_started:
            stimulus_pulse_started = True
            stimulus_pulse_start_time = globalClock.getTime()
            send_trigger(30)
        #reset trigger (0)
        if stimulus_pulse_started and not stimulus_pulse_ended:
            if globalClock.getTime() - stimulus_pulse_start_time >= 0.005:
                send_trigger(0)
                stimulus_pulse_ended = True
      End Routine:
        i += 1
    TextComponent text_distr_T2
      color = blue
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (frames)] = dur_frames_stim
      text [set every repeat] = $distractors_trial[i]
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    TextComponent text_blank_distractors_T2
      durationEstim = 0.05
      letterHeight = 0.05
      startVal [frame N] = dur_frames_stim
      stopVal [duration (frames)] = dur_frames_blank
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  Routine distractors_T0
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    CodeComponent code_trigger_distrT0
      Code Type = Py
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      Begin Routine:
        stimulus_pulse_started = False
        stimulus_pulse_ended = False
      Each Frame:
        #send dist_T0 trigger (30)
        if text_distr_T0.status == STARTED and not stimulus_pulse_started:
            stimulus_pulse_started = True
            stimulus_pulse_start_time = globalClock.getTime()
            send_trigger(30)
        #reset trigger (0)
        if stimulus_pulse_started and not stimulus_pulse_ended:
            if globalClock.getTime() - stimulus_pulse_start_time >= 0.005:
                send_trigger(0)
                stimulus_pulse_ended = True
    CodeComponent code_save_distrT0
      Code Type = Py
      Begin Routine:
        thisExp.addData('distractor_T0',distractors_trial[i])
      End Routine:
        i += 1
    TextComponent text_distr_T0
      color = blue
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (frames)] = dur_frames_stim
      text [set every repeat] = $distractors_trial[i]
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    TextComponent text_blank_distractors_T0
      durationEstim = 0.05
      letterHeight = 0.05
      startVal [frame N] = dur_frames_stim
      stopVal [duration (frames)] = dur_frames_blank
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  Routine T1_number
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    CodeComponent code_trigger_T1
      Code Type = Py
      Begin Routine:
        stimulus_pulse_started = False
        stimulus_pulse_ended = False
      Each Frame:
        #send T1 trigger (20/21/22/23)
        if text_T1.status == STARTED and not stimulus_pulse_started:
            stimulus_pulse_started = True
            stimulus_pulse_start_time = globalClock.getTime()
            send_trigger(trigger_T1)
        #reset trigger (0)
        if stimulus_pulse_started and not stimulus_pulse_ended:
            if globalClock.getTime() - stimulus_pulse_start_time >= 0.005:
                send_trigger(0)
                stimulus_pulse_ended = True
    TextComponent text_T1
      color = blue
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = dur_frames_stim
      text [set every repeat] = $str(int(T1))
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    TextComponent text_blank_number_T1
      durationEstim = 0.05
      letterHeight = 0.05
      startVal [frame N] = dur_frames_stim
      stopVal [duration (frames)] = dur_frames_blank
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  Routine T1_num
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    TextComponent text_T1_num
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.083
      text [set every repeat] = $str(int(T1))
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  Routine set_trial
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    CodeComponent code_trial
      Code Type = Py
      Begin Routine:
        distractors_trial = list(distractors_df.dist[dist_idx:dist_idx+18])
        i = 0 # distractor index
        print(f'\nTrial #{trial.thisN+1}')

        #triggers
        if task == 'single':
            trigger_T0 = 10
            trigger_T1 = 20 if responseT1 == 'j' else 21
            if related == 'unrelated':
                trigger_T2 = 101 if lagT1 == 1 else (103 if lagT1 == 3 else 107)
            elif related == 'related':
                trigger_T2 = 111 if lagT1 == 1 else (113 if lagT1 == 3 else 117)
        elif task == 'dual':
            trigger_T0 = 11
            trigger_T1 = 22 if responseT1 == 'j' else 23
            if related == 'unrelated':
                trigger_T2 = 201 if lagT1 == 1 else (203 if lagT1 == 3 else 207)
            elif related == 'related':
                trigger_T2 = 211 if lagT1 == 1 else (213 if lagT1 == 3 else 217)
      End Routine:
        dist_idx += 18
  Routine end
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    CodeComponent code_end
      Code Type = Py
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      Begin Routine:
        stimulus_pulse_started = False
        stimulus_pulse_ended = False
      Each Frame:
        #send finish trigger (200)
        if text_thanks.status == STARTED and not stimulus_pulse_started:
            stimulus_pulse_started = True
            stimulus_pulse_start_time = globalClock.getTime()
            send_trigger(200)
        #reset trigger (0)
        if stimulus_pulse_started and not stimulus_pulse_ended:
            if globalClock.getTime() - stimulus_pulse_start_time >= 0.005:
                send_trigger(0)
                stimulus_pulse_ended = True
      End Routine:
        if port_type == 'serial':
            s_port.close()
    TextComponent text_thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $txt_thanks
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  Routine set_block
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    CodeComponent set_exp
      Code Type = Py
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      Begin Experiment:
        import random
        import pandas as pd

        #local path to language
        local_path = 'languages/'+expInfo['language']

        with open(f'{local_path}/rest.txt', 'r') as file:
            txt_rest = file.read()

        with open(f'{local_path}/thanks.txt', 'r') as file:
            txt_thanks = file.read()

        # duration in frames
        refreshRate = int(expInfo['refresh rate (Hz)'])
        dur_frames_stim = round(0.033 * refreshRate)
        dur_frames_blank = round(0.050 * refreshRate)

        # set trials order
        n = 30 # num of related and unrelated trials
        related_idx = list(range(360))
        unrelated_idx = list(range(360,720))
        random.shuffle(related_idx)
        random.shuffle(unrelated_idx)

        # read file with distractors
        distractors_df = pd.read_csv(f'{local_path}/distractors.csv')
        distractors_df = distractors_df.sample(frac = 1)
        dist_idx = 0

        # feedback counters
        counter_T1 = 0
        counter_T2 = 0
      Begin Routine:
        # set blocks order
        task = task1 if expInfo['order [1: single-dual or 2: dual-single]']=='1' else task2

        # choose rows for this trial
        trials_in_block = related_idx[-n:] + unrelated_idx[-n:]
        shuffle(trials_in_block)
        related_idx = related_idx[:len(related_idx)-n]
        unrelated_idx = unrelated_idx[:len(unrelated_idx)-n]

        # log
        print(f'\nBlock #{block.thisN+1}\nTask: {task}\n')
    CodeComponent set_EEG
      Code Type = Py
      Begin Experiment:
        # serial/parallel port address
        port_address = expInfo['port address']
        port_type = expInfo['port(noEEGtest/parallel/serial/cedrus/ghent)']

        if port_type == 'noEEGtest': #for testing
            def send_trigger(triggerCode):
                print(triggerCode)
            def send_trigger_now(triggerCode):
                print(triggerCode)
        elif port_type == 'parallel':
            from psychopy import parallel
            # create parallel port
            p_port = parallel.ParallelPort(address = port_address)
            #send pport trigger
            def send_trigger(triggerCode):
                win.callOnFlip(p_port.setData, triggerCode)
            def send_trigger_now(triggerCode):
                p_port.setData(triggerCode)
        elif port_type in ['serial','ghent','serial_BPTriggerBox']:
            import serial
            if port_type == 'ghent':
                # set up a serial port
                s_port = serial.Serial(port_address, baudrate = 115200)
                #send serial port trigger
                def send_trigger(triggerCode):
                    win.callOnFlip(s_port.write, triggerCode.to_bytes(1, 'big'))
                def send_trigger_now(triggerCode):
                    s_port.write(triggerCode.to_bytes(1, 'big'))
            elif port_type == 'serial':
                # set up a serial port
                s_port = serial.Serial(port = port_address)
                #send serial port trigger
                def send_trigger(triggerCode):
                    win.callOnFlip(s_port.write, str.encode(str(triggerCode)))
                def send_trigger_now(triggerCode):
                    s_port.write(str.encode(str(triggerCode)))
            elif port_type == 'serial_BPTriggerBox':
                    # set up a serial port
                    s_port = serial.Serial(port = port_address)
                    #send serial port trigger
                    def send_trigger(triggerCode):
                        win.callOnFlip(s_port.write, bytes([triggerCode]))
                    def send_trigger_now(triggerCode):
                        s_port.write(bytes([triggerCode]))
        elif port_type == 'cedrus':
            import pyxid2
            import time
            # get a list of all attached XID devices
            devices = pyxid2.get_xid_devices()
            dev = devices[0] # get the first device to use
            dev.set_pulse_duration(300)
            def send_trigger(triggerCode):
                win.callOnFlip(dev.activate_line, bitmask=triggerCode)
            def send_trigger_now(triggerCode):
                dev.activate_line(bitmask=triggerCode)
  Routine blank_T1T2
    RoutineSettingsComponent blank_T1T2
      skipIf = task == 'single'
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    CodeComponent code_trigger55
      Code Type = Py
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      Begin Routine:
        trigger_sent = False
        trigger_reset = False
      Each Frame:
        #send trigger if missed answer (55)
        if not key_resp_T1.keys and not trigger_sent:
            trigger_sent = True
            stimulus_pulse_start_time = globalClock.getTime()
            send_trigger(55)
        #reset trigger (0)
        if trigger_sent and not trigger_reset:
            if globalClock.getTime() - stimulus_pulse_start_time >= 0.005:
                send_trigger(0)
                trigger_reset = True
    TextComponent text_blankT1T2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine blank_2s
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    CodeComponent code_trigger65
      Code Type = Py
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      Begin Routine:
        trigger_sent = False
        trigger_reset = False
      Each Frame:
        if not key_resp_T2.keys and not trigger_sent:
            trigger_sent = True
            stimulus_pulse_start_time = globalClock.getTime()
            send_trigger(65)
        if trigger_sent and not trigger_reset:
            if globalClock.getTime() - stimulus_pulse_start_time >= 0.005:
                send_trigger(0)
                trigger_reset = True
    TextComponent text_blank2s
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine blank_1s
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    TextComponent text_blank1s
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine test
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    CodeComponent code_3
      Code Type = Py
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      Begin Experiment:
        from psychopy import parallel
      Begin Routine:
        pulse_started = False
        pulse_ended = False

        pulse_started1 = False
        pulse_ended1 = False

        pulse_started2 = False
        pulse_ended2 = False

        pulse_started3 = False
        pulse_ended3 = False

        pulse_started4 = False
        pulse_ended4 = False

        pulse_started5 = False
        pulse_ended5 = False
      Each Frame:
        if frameN==0 and not pulse_started:
            pulse_started = True
            pulse_start_time = globalClock.getTime()
            send_trigger(1)

        if frameN==0 and pulse_started and not pulse_ended:
            if globalClock.getTime() - pulse_start_time >= 0.005:
                send_trigger(0)
                pulse_ended = True

        if frameN==1 and not pulse_started1:
            pulse_started1 = True
            pulse_start_time = globalClock.getTime()
            send_trigger(2)

        if frameN==1 and pulse_started1 and not pulse_ended1:
            if globalClock.getTime() - pulse_start_time >= 0.005:
                send_trigger(0)
                pulse_ended1 = True

        if frameN==2 and not pulse_started2:
            pulse_started2 = True
            pulse_start_time = globalClock.getTime()
            send_trigger(3)

        if frameN==2 and pulse_started2 and not pulse_ended2:
            if globalClock.getTime() - pulse_start_time >= 0.005:
                send_trigger(0)
                pulse_ended2 = True

        if frameN==3 and not pulse_started3:
            pulse_started3 = True
            pulse_start_time = globalClock.getTime()
            send_trigger(4)

        if frameN==3 and pulse_started3 and not pulse_ended3:
            if globalClock.getTime() - pulse_start_time >= 0.005:
                send_trigger(0)
                pulse_ended3 = True

        if frameN==4 and not pulse_started4:
            pulse_started4 = True
            pulse_start_time = globalClock.getTime()
            send_trigger(5)

        if frameN==4 and pulse_started4 and not pulse_ended4:
            if globalClock.getTime() - pulse_start_time >= 0.005:
                send_trigger(0)
                pulse_ended4 = True

        if frameN==5 and not pulse_started5:
            pulse_started5 = True
            pulse_start_time = globalClock.getTime()
            send_trigger(6)

        if frameN==5 and pulse_started5 and not pulse_ended5:
            if globalClock.getTime() - pulse_start_time >= 0.005:
                send_trigger(0)
                pulse_ended5 = True
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 2
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      text:
        Any text

        including line breaks
    TextComponent text_2
      letterHeight = 0.05
      startVal [frame N] = 2
      stopVal [duration (frames)] = 3
      text = test
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Flow
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = task_type.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'task1': 'single', 'task2': 'dual'},
      {'task1': 'single', 'task2': 'dual'},
      {'task1': 'single', 'task2': 'dual'},
      {'task1': 'single', 'task2': 'dual'},
      {'task1': 'single', 'task2': 'dual'},
      {'task1': 'single', 'task2': 'dual'},
      {'task1': 'dual', 'task2': 'single'},
      {'task1': 'dual', 'task2': 'single'},
      {'task1': 'dual', 'task2': 'single'},
      {'task1': 'dual', 'task2': 'single'},
      {'task1': 'dual', 'task2': 'single'},
      {'task1': 'dual', 'task2': 'single'}]
    Routine set_block
    Routine instructions
    LoopInitiator trial loopType="TrialHandler"
      Selected rows = $trials_in_block
      conditionsFile = $f'{local_path}/wordPairs.xlsx'
      loopType = sequential
      nReps = 1
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      conditions:
        [{'T0': 'HANDS', 'T2': 'XXFEETX', 'T1': 8888888.0, 'lagT0': 10, 'lagT1': 7, 'lagT2': 3, 'responseT1': 'j', 'responseT2': 'f', 'related': 1},
        {'T0': 'STORE', 'T2': 'XXSHOPX', 'T1': 2222222.0, 'lagT0': 10, 'lagT1': 7, 'lagT2': 3, 'responseT1': 'j', 'responseT2': 'f', 'related': 1},
        {'T0': 'CURTAIN', 'T2': 'XDRAPEX', 'T1': 5555555.0, 'lagT0': 10, 'lagT1': 3, 'lagT2': 7, 'responseT1': 'f', 'responseT2': 'f', 'related': 1},
        {'T0': 'CAT', 'T2': 'XKITTEN', 'T1': 5555555.0, 'lagT0': 7, 'lagT1': 3, 'lagT2': 10, 'responseT1': 'f', 'responseT2': 'f', 'related': 1},
        {'T0': 'PONDER', 'T2': 'XTHINKX', 'T1': 3333333.0, 'lagT0': 7, 'lagT1': 7, 'lagT2': 6, 'responseT1': 'f', 'responseT2': 'f', 'related': 1},
        {'T0': 'BAG', 'T2': 'XXSACKX', 'T1': 9999999.0, 'lagT0': 10, 'lagT1': 7, 'lagT2': 3, 'responseT1': 'f', 'responseT2': 'f', 'related': 1},
        {'T0': 'STRAW', 'T2': 'XXHAYXX', 'T1': 9999999.0, 'lagT0': 10, 'lagT1': 3, 'lagT2': 7, 'responseT1': 'f', 'responseT2': 'f', 'related': 1},
        {'T0': 'WEEDS', 'T2': 'XROOTSX', 'T1': 9999999.0, 'lagT0': 7, 'lagT1': 7, 'lagT2': 6, 'responseT1': 'f', 'responseT2': 'f', 'related': 1},
        {'T0': 'PROMISE', 'T2': 'XPLEDGE', 'T1': 6666666.0, 'lagT0': 10, 'lagT1': 7, 'lagT2': 3, 'responseT1': 'j', 'responseT2': 'f', 'related': 1},
        {'T0': 'PROFIT', 'T2': 'XXLOSSX', 'T1': 2222222.0, 'lagT0': 10, 'lagT1': 7, 'lagT2': 3, 'responseT1': 'j', 'responseT2': 'f', 'related': 1}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
      Routine set_trial
      Routine T0_context
      LoopInitiator trials_T0_context loopType="TrialHandler"
        loopType = sequential
        nReps = lagT0-1
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        Routine distractors_T0
      LoopTerminator trials_T0_context
      Routine T1_number
      LoopInitiator trials_T1 loopType="TrialHandler"
        loopType = sequential
        nReps = lagT1-1
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        Routine distractors_T1
      LoopTerminator trials_T1
      Routine T2_probe
      LoopInitiator trials_T2 loopType="TrialHandler"
        loopType = sequential
        nReps = lagT2
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        Routine distractors_T2
      LoopTerminator trials_T2
      Routine blank_1s
      Routine Ask_T1
      Routine blank_T1T2
      Routine Ask_T2
      Routine blank_2s
    LoopTerminator trial
    Routine rest
  LoopTerminator block
  Routine end
